<?xml version="1.0" encoding="ISO-8859-1"?>
<recipe>
	<command_sequence>
		<wakeup>10000</wakeup>
		<loop name = "Movie Loop 1">
			<movie>
				<name increment = "Yes">hal</name>
				<length>5</length>
				<parameters>hal-config-10x-748-637-546-476-405</parameters>
				<overwrite>False</overwrite>
				<variable_entry name = "Movie Loop 1"></variable_entry>
			</movie>
		</loop>
		<loop name="Hybridize Loop 1">
			<variable_entry name = "Hybridize Loop 1"></variable_entry>
			<wakeup>10000</wakeup>
			
			<loop name = "Movie Loop 2">
				<movie>
					<name increment = "Yes">hal</name>
					<length>5</length>
					<parameters>hal-config-10x-748-637-546-476-405</parameters>
					<overwrite>False</overwrite>
					<variable_entry name = "Movie Loop 2"></variable_entry>
				</movie>
			</loop>
		</loop>
	</command_sequence>

	<loop_variable name = "Movie Loop 1">
		<file_path></file_path>
	</loop_variable>

	<loop_variable name = "Movie Loop 2">
		<file_path></file_path>
	</loop_variable>

	<loop_variable name = "Hybridize Loop 1">
		<value>
			<valve_protocol>Cleave</valve_protocol>
			<valve_protocol>Hybridize 2</valve_protocol>
			<email><subject>Microscope Update</subject><body>Starting Hyb 2</body></email>
		</value>
		<value>
			<valve_protocol>Cleave</valve_protocol>
			<valve_protocol>Hybridize 3</valve_protocol>
			<email><subject>Microscope Update</subject><body>Starting Hyb 2</body></email>
		</value>
		<value>
			<valve_protocol>Cleave</valve_protocol>
			<valve_protocol>Hybridize 4</valve_protocol>
			<email><subject>Microscope Update</subject><body>Starting Hyb 2</body></email>
		</value>
		<value>
			<valve_protocol>Cleave</valve_protocol>
			<valve_protocol>Hybridize 5</valve_protocol>
			<email><subject>Microscope Update</subject><body>Starting Hyb 2</body></email>
		</value>
		<value>
			<valve_protocol>Cleave</valve_protocol>
			<valve_protocol>Hybridize 6</valve_protocol>
			<email><subject>Microscope Update</subject><body>Starting Hyb 2</body></email>
		</value>
	</loop_variable>
</recipe>
